e
var c
var p
var i
store_var i 0i ja
# any changes in below 4 lines should
# will result in column index error
set_pgstat_chan 1
set_pgstat_mode 0
set_pgstat_chan 0
set_pgstat_mode 2
set_max_bandwidth 40
# set_range_minmax da {Edc} {Edc}
set_range_minmax da 500m 500m
set_range ba 100u
set_autoranging ba 100n 100u
cell_on
#Equilibrate at -300mV and autorange for 2s prior to SWV
# below line meas_loop_ca p c {Edc Edc tequilibration}
#meas_loop_ca p c 500m 500m 2
#pck_start
#pck_add p
#pck_add c
#pck_end
#endloop
# Measure CA: t, I, Edc, T_interval, ( {T_run=20sec} + T_interval )
meas_loop_ca p c 500m 100m 20100m
pck_start
pck_add p
pck_add c
pck_end
endloop
on_finished:
cell_off

