e
var c
var p
#var i
#store_var i 0i ja
# any changes in below 4 lines should
# will result in column index error
set_pgstat_chan 1
set_pgstat_mode 0
set_pgstat_chan 0
set_pgstat_mode 2
set_max_bandwidth 40
# set_range_minmax da {-Ebegin} {+Amplitude+Eend}
set_range_minmax da -500m 700m
set_range ba 100u
set_autoranging ba 100n 100u
cell_on
#Equilibrate at -300mV and autorange for 2s prior to SWV
# below line meas_loop_ca p c {Ebegin} {Eend} {tequilibration}
meas_loop_ca p c -500m 500m 5
endloop
# meas_loop_dpv p c {E_begin} {E_end} {E_step} {E_pulse} {t_pulse} {scan_rate}
meas_loop_dpv p c -500m 500m 10m 200m 20m 100m
	pck_start
	pck_add p
	pck_add c
	pck_end
endloop
on_finished:
cell_off

