e
# Declare variables for frequency, and real and imaginary parts of complex result
var f
var r
var j
# Set to channel 0 (Lemo)
set_pgstat_chan 1
# Set mode to high speed
# other modes wont work for EIS
set_pgstat_mode 3
# Enable all supported ranges for current autoranging
set_autoranging ba 1p 1
# Enable all supported ranges for potential autoranging
set_autoranging ab 1p 1
# Turn cell on
cell_on
# Call the EIS loop with (Eac = 10 mV amplitude),(max freq f_start = 200 kHz),(min frq f_end = 100mHz), (nr Of frequencies = 12) ,(Edc= 0 mV DC)
meas_loop_eis f r j 10m 200k 100m 12 0m
	# Add the returned variables to the data package
	pck_start
	pck_add f
	pck_add r
	pck_add j
	pck_end
endloop
on_finished:
cell_off

